OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Acquisition test

  Scenario used for testing data acquisition. The signal quality should
  always be checked before training.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
Data=#1 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.500000
-> Spectral analysis => #5
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#5.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#3 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
