OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x4c536d0a = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/classifier-training-harm.xml
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP - Classifier Training CSP
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.

Generic stream reader => #0
  Filename = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.02.13-15.22.10]-martin-8-5elect.ov
#0.Output stream 2 -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Temporal filter "Notch 50Hz" => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #4
#4.Output stream 2 -> Target Separator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3 4
  Output Stimulation = OVTK_StimulationId_Target
#4.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1 (base)" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 5.20455
  High cut frequency (Hz) = 5.70455
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
Input signal=#7, Input stimulations=#5.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #12
  Equation = log(1+x)
Input signal=#7, Input stimulations=#5.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #17
  Equation = log(1+x)
#4.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1.cfg
-> Temporal filter "Frequency 1 (1st harmonic)" => #19
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10.6591
  High cut frequency (Hz) = 11.1591
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
Input signal=#19, Input stimulations=#5.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #24
  Equation = log(1+x)
Input stream 1=#12, Input stream 2=#24 -> Feature aggregator => #25
Input signal=#19, Input stimulations=#5.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #30
  Equation = log(1+x)
Input stream 1=#17, Input stream 2=#30 -> Feature aggregator => #31
Stimulations=#4.Output stream 2, Features for class 1=#25, Features for class 2=#31 -> Classifier trainer "Trainer for frequency 1" => #32
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #33
#33.Output stream 2 -> Target Separator => #34
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3 4
  Output Stimulation = OVTK_StimulationId_Target
#33.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2 (base)" => #36
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.4166
  High cut frequency (Hz) = 6.9166
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
Input signal=#36, Input stimulations=#34.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #41
  Equation = log(1+x)
Input signal=#36, Input stimulations=#34.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #46
  Equation = log(1+x)
#33.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2h1.cfg
-> Temporal filter "Frequency 2 (1st harmonic)" => #48
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13.0832
  High cut frequency (Hz) = 13.5832
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
Input signal=#48, Input stimulations=#34.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #53
  Equation = log(1+x)
Input stream 1=#41, Input stream 2=#53 -> Feature aggregator => #54
Input signal=#48, Input stimulations=#34.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #59
  Equation = log(1+x)
Input stream 1=#46, Input stream 2=#59 -> Feature aggregator => #60
Stimulations=#33.Output stream 2, Features for class 1=#54, Features for class 2=#60 -> Classifier trainer "Trainer for frequency 2" => #61
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #62
#62.Output stream 2 -> Target Separator => #63
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2 4
  Output Stimulation = OVTK_StimulationId_Target
#62.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3 (base)" => #65
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.25
  High cut frequency (Hz) = 7.75
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
Input signal=#65, Input stimulations=#63.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #70
  Equation = log(1+x)
Input signal=#65, Input stimulations=#63.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #75
  Equation = log(1+x)
#62.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3h1.cfg
-> Temporal filter "Frequency 3 (1st harmonic)" => #77
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input signal=#77, Input stimulations=#63.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #82
  Equation = log(1+x)
Input stream 1=#70, Input stream 2=#82 -> Feature aggregator => #83
Input signal=#77, Input stimulations=#63.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #88
  Equation = log(1+x)
Input stream 1=#75, Input stream 2=#88 -> Feature aggregator => #89
Stimulations=#62.Output stream 2, Features for class 1=#83, Features for class 2=#89 -> Classifier trainer "Trainer for frequency 3" => #90
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #91
#91.Output stream 2 -> Target Separator => #92
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 4
  Non Targets = 0 1 2 3
  Output Stimulation = OVTK_StimulationId_Target
#91.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
-> Temporal filter "Frequency 4 (base)" => #94
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.25
  High cut frequency (Hz) = 7.75
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
Input signal=#94, Input stimulations=#92.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #99
  Equation = log(1+x)
Input signal=#94, Input stimulations=#92.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #104
  Equation = log(1+x)
#91.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4h1.cfg
-> Temporal filter "Frequency 4 (1st harmonic)" => #106
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4h1.cfg
Input signal=#106, Input stimulations=#92.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #111
  Equation = log(1+x)
Input stream 1=#99, Input stream 2=#111 -> Feature aggregator => #112
Input signal=#106, Input stimulations=#92.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #117
  Equation = log(1+x)
Input stream 1=#104, Input stream 2=#117 -> Feature aggregator => #118
Stimulations=#91.Output stream 2, Features for class 1=#112, Features for class 2=#118 -> Classifier trainer "Trainer for frequency 4" => #119
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
New input[0]=#32, New input[1]=#61, New input[2]=#90, New input[3]=#119 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
