OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Scenario description

  This scenario is used for training of the Common Spatial Pattern filters.
  These enable you to use any set of electrodes and will automatically
  select the best combination of them for you.

  By default the dimension of the CSP filters is 2. If you use many
  electrodes you may want to raise this value to get even better precision.

  For the detailed description and experimental protocol, please refer to
  the SSVEP Scenario documentation on the OpenViBE website.

  note: the classifiers go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/classifiers/).
Comment
  Important : Do not forget to
  change the settings in the Generic stream reader to load
  the file you recorded in the previous step. By default the
  scenario uses example data provided with OpenViBE.
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the fourth stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Settings
  inFile = C:\Users\Tonnius\Documents\Git\magister_BCI\OpenVibe\ssvep_maka\signals\ssvep-record-[2018.03.05-14.16.42]-t6nis-857Hz.ov

Generic stream reader => #0
  Filename = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.02.13-15.22.10]-martin-8-5elect.ov
#0.Output stream 2 -> Channel Selector => #1
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #3
#3.Output stream 1 -> Temporal filter "Frequency 1" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
#3.Output stream 2 -> Target Separator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#4, Input stimulations=#5.Stimulations -> Stimulation based epoching "SBE" => #6
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#4, Input stimulations=#5.New output -> Stimulation based epoching "SBE" => #7
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#3.Output stream 2, Signal condition 1=#6, Signal condition 2=#7 -> CSP Spatial Filter Trainer => #8
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
  Filter dimension = 4
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #9
#9.Output stream 1 -> Temporal filter "Frequency 2" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
#9.Output stream 2 -> Target Separator => #11
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#11.Stimulations -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#10, Input stimulations=#11.New output -> Stimulation based epoching "SBE" => #13
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#9.Output stream 2, Signal condition 1=#12, Signal condition 2=#13 -> CSP Spatial Filter Trainer => #14
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
  Filter dimension = 4
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #15
#15.Output stream 1 -> Temporal filter "Frequency 3" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
#15.Output stream 2 -> Target Separator => #17
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#16, Input stimulations=#17.Stimulations -> Stimulation based epoching "SBE" => #18
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#16, Input stimulations=#17.New output -> Stimulation based epoching "SBE" => #19
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#15.Output stream 2, Signal condition 1=#18, Signal condition 2=#19 -> CSP Spatial Filter Trainer => #20
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
  Filter dimension = 4
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #21
#21.Output stream 1 -> Temporal filter "Frequency 4" => #22
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
#21.Output stream 2 -> Target Separator => #23
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 4
  Non Targets = 0 1 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#22, Input stimulations=#23.Stimulations -> Stimulation based epoching "SBE" => #24
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#22, Input stimulations=#23.New output -> Stimulation based epoching "SBE" => #25
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#21.Output stream 2, Signal condition 1=#24, Signal condition 2=#25 -> CSP Spatial Filter Trainer => #26
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
  Filter dimension = 4
  Save as box config = true
New input[0]=#8, New input[1]=#14, New input[2]=#20, New input[3]=#26 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
