OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

Generic stream reader => #0
  Filename = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.03.26-11.57.22]-t6nis-75-857-10-12Hz-test.ov
#0.Output stream 2 -> Stimulation listener
  Log level to use = Information
#0.Output stream 1 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Input stream=#0.Output stream 1, Stimulations stream=#0.Output stream 2 -> CSV File Writer
  Filename = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.03.26-11.57.22]-t6nis-75-857-10-12Hz-test.csv
  Precision = 10
  Append data = false
  Only last matrix = false
