OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  Scenario description

  In this scenario the performance of the system can be measured
  where the trained system is compared to a recorded test set.

  Don't forget to input the test set  into the Generic stream reader!
Comment
  Results will be displayed in the OpenVibe console
Settings
  inFile = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.01.17-16.49.48]-tonis-test.ov

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-subjectX-test.ov
#0.Output stream 2 -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Temporal filter "Notch 50Hz" => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
#3.Output stream 1 -> Identity => #4
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #10
  Equation = log(1+x)
#4 -> Temporal filter "Frequency 1 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
-> Spatial Filter 1h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #16
  Equation = log(1+x)
Input stream 1=#10, Input stream 2=#16 -> Feature aggregator => #17
Features=#17 -> Classifier processor => #18
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
#4 -> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #24
  Equation = log(1+x)
#4 -> Temporal filter "Frequency 2 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
-> Spatial Filter 2h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #30
  Equation = log(1+x)
Input stream 1=#24, Input stream 2=#30 -> Feature aggregator => #31
Features=#31 -> Classifier processor => #32
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
#4 -> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #38
  Equation = log(1+x)
#4 -> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
-> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #44
  Equation = log(1+x)
Input stream 1=#38, Input stream 2=#44 -> Feature aggregator => #45
Features=#45 -> Classifier processor => #46
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
#4 -> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #52
  Equation = log(1+x)
#4 -> Temporal filter "Frequency 4 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4h1.cfg
-> Spatial Filter 4h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #58
  Equation = log(1+x)
Input stream 1=#52, Input stream 2=#58 -> Feature aggregator => #59
Features=#59 -> Classifier processor => #60
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
#3.Output stream 2 -> Identity => #61
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
classMat1=#18.Probability values, classMat2=#32.Probability values, classMat3=#46.Probability values, classMat4=#60.Probability values, currentTarget=#61 -> Python scripting
  Clock frequency (Hz) = 50
  Script = ${Player_ScenarioDirectory}/scripts/python-confusion-matrix.py
  Epoch Duration = 0.5
  Epoch Interval = 0.5
  Freq Tol = 0.3
  channels = 1:5
  Nr of subjects = 1
  SimulationFreq = 20;15;12;10
  Current Subject Nr = 0
  Thresholds = 0.6:0.1
  Results Directory = ${Player_ScenarioDirectory}/results/
