OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  Scenario description

  This scenario must be run at least once before
  running any further scenarios

  This is a scenario where you can configure your SSVEP experiment. There
  are two boxes containing configuration parameters:

  Peripheral Settings

  Experiment Settings
Comment
  Peripheral Settings

  Settings in this box must match your hardware configuration.
  Currently, the only supported setting is the screen refresh rate.

  Screen Refresh Rate :  The refresh rate of your screen,
  refer to your screen's user manual to find this value.

  Your screen will be able to reproduce only frequencies which
  are result of division of your screen refresh rate by an
  integer.
Comment
  Configurable box
Comment
  Configurable box
Comment
  Experiment Settings

  Settings concerning the SSVEP experiment in general.

  Stimulation Frequencies A comma separated list of
  frequencies used for the stimulation.

  Processing Epoch Duration The length of the slice of the signal
  which will be used to find SSVEP response.

  Processing Epoch Interval The speed interval between slices of the
  signal.

  Processing Frequency Tolerance The width of the frequency band
  around the stimulation frequency used for classification.
Settings
  epDur = 0.5
  epInt = 0.1
  freqTol = 0.25
  ch = 1:5

Peripheral Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/configuration-peripheral-settings.lua
  Screen Refresh Rate = 60
-> Experiment Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/configuration-experiment-settings.lua
  Target Light Color = 100,0,0
  Target Dark Color = 10,10,10
  Stimulation Frequencies = 20;15;12;10
  Processing Epoch Duration = 0.5
  Processing Epoch Interval = 0.5
  Processing Frequency Tolerance = 0.3
  Selected channels = 1:5
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
