OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x4c536d0a = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/CSP-training-harm.xml
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP CSP Training
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency

Generic stream reader => #0
  Filename = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.02.13-15.22.10]-martin-8-5elect.ov
#0.Output stream 2 -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Temporal filter "Notch 50Hz" => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #4
#4.Output stream 1 -> Temporal filter "Frequency 1 (base)" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
#4.Output stream 2 -> Target Separator => #6
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#5, Input stimulations=#6.Stimulations -> Stimulation based epoching "SBE" => #7
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#5, Input stimulations=#6.New output -> Stimulation based epoching "SBE" => #8
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#4.Output stream 2, Signal condition 1=#7, Signal condition 2=#8 -> CSP Spatial Filter Trainer 1 => #9
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
  Filter dimension = 3
  Save as box config = true
#4.Output stream 1 -> Temporal filter "Frequency 1 (1st harmonic)" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
Input signal=#10, Input stimulations=#6.Stimulations -> Stimulation based epoching "SBE" => #11
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#10, Input stimulations=#6.New output -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#4.Output stream 2, Signal condition 1=#11, Signal condition 2=#12 -> CSP Spatial Filter Trainer 1h => #13
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1h1.cfg
  Filter dimension = 3
  Save as box config = true
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #14
#14.Output stream 1 -> Temporal filter "Frequency 2 (base)" => #15
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
#14.Output stream 2 -> Target Separator => #16
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#15, Input stimulations=#16.Stimulations -> Stimulation based epoching "SBE" => #17
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#15, Input stimulations=#16.New output -> Stimulation based epoching "SBE" => #18
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#14.Output stream 2, Signal condition 1=#17, Signal condition 2=#18 -> CSP Spatial Filter Trainer 2 => #19
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
  Filter dimension = 3
  Save as box config = true
#14.Output stream 1 -> Temporal filter "Frequency 2 (1st harmonic)" => #20
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
Input signal=#20, Input stimulations=#16.Stimulations -> Stimulation based epoching "SBE" => #21
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#20, Input stimulations=#16.New output -> Stimulation based epoching "SBE" => #22
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#14.Output stream 2, Signal condition 1=#21, Signal condition 2=#22 -> CSP Spatial Filter Trainer 2h => #23
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2h1.cfg
  Filter dimension = 3
  Save as box config = true
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #24
#24.Output stream 1 -> Temporal filter "Frequency 3 (base)" => #25
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
#24.Output stream 2 -> Target Separator => #26
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#25, Input stimulations=#26.Stimulations -> Stimulation based epoching "SBE" => #27
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#25, Input stimulations=#26.New output -> Stimulation based epoching "SBE" => #28
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#24.Output stream 2, Signal condition 1=#27, Signal condition 2=#28 -> CSP Spatial Filter Trainer 3 => #29
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
  Filter dimension = 3
  Save as box config = true
#24.Output stream 1 -> Temporal filter "Frequency 3 (1st harmonic)" => #30
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input signal=#30, Input stimulations=#26.Stimulations -> Stimulation based epoching "SBE" => #31
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#30, Input stimulations=#26.New output -> Stimulation based epoching "SBE" => #32
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#24.Output stream 2, Signal condition 1=#31, Signal condition 2=#32 -> CSP Spatial Filter Trainer 3h => #33
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-3h1.cfg
  Filter dimension = 3
  Save as box config = true
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #34
#34.Output stream 1 -> Temporal filter "Frequency 4 (base)" => #35
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
#34.Output stream 2 -> Target Separator => #36
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 4
  Non Targets = 0 1 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#35, Input stimulations=#36.Stimulations -> Stimulation based epoching "SBE" => #37
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#35, Input stimulations=#36.New output -> Stimulation based epoching "SBE" => #38
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#34.Output stream 2, Signal condition 1=#37, Signal condition 2=#38 -> CSP Spatial Filter Trainer 4 => #39
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
  Filter dimension = 3
  Save as box config = true
#34.Output stream 1 -> Temporal filter "Frequency 4 (1st harmonic)" => #40
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4h1.cfg
Input signal=#40, Input stimulations=#36.Stimulations -> Stimulation based epoching "SBE" => #41
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#40, Input stimulations=#36.New output -> Stimulation based epoching "SBE" => #42
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#34.Output stream 2, Signal condition 1=#41, Signal condition 2=#42 -> CSP Spatial Filter Trainer 4h => #43
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-4h1.cfg
  Filter dimension = 3
  Save as box config = true
New input[0]=#9, New input[1]=#13, New input[2]=#19, New input[3]=#23, New input[4]=#29, New input[5]=#33, New input[6]=#39, New input[7]=#43 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
