OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Scenario description

  This step will use the signal recorded during the previous step
  training acquisition to generate classifiers which are in
  turn usable in online BCI applications.

  Important : Do not forget to
  change the settings in the Generic stream reader to load
  the file you recorded in the previous step. By default the
  scenario uses example data provided with OpenViBE.

  Notice : this scenario will work for three stimulation
  frequencies.  If you wish to use more than three commands in your
  applications, you will have to modify it.  This modification is
  pretty straightforward just duplicate a branch of the processing
  chain and change the files used by boxes Temporal filter,
  Target Separator and Classifier trainer
Comment
  Signal processing

  Each frequency is treated separately. There are two important
  boxes in the processing chain :

  Temporal filter extracts a single frequency band. It
  should be configured by a file generated by the configuration
  scenario.

  Target Separator separates targets used to mark one
  frequency from the others and sends stimulations to corresponding
  outputs (Target/Non-Target).
Comment
  Signal processing for the third stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature extraction

  Finally the classifier receives values of amplitude for
  stimulated and non-stimulated periods and trains to distinguish
  the two.

  One classifier is trained per each stimulation frequency.
Settings
  inFile = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.01.10-15.32.49]-tonis.ov

Generic stream reader => #0
  Filename = C:/Users/Tonnius/Documents/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.03.26-13.44.06]-t6nis-857Hz.ov
#0.Output stream 2 -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Temporal filter "Notch 50Hz" => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
#3.Output stream 1 -> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
Input stream 1=#4, Input stream 2=#3.Output stream 2 -> Identity => #5
#5.Output stream 1 -> Temporal filter "Frequency 3" => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
#5.Output stream 2 -> Target Separator => #7
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#6, Input stimulations=#7.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #13
Input signal=#6, Input stimulations=#7.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #19
Stimulations=#5.Output stream 2, Features for class 1=#13, Features for class 2=#19 -> Classifier trainer freq 3 => #20
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#3.Output stream 1 -> Spatial Filter => #21
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
Input stream 1=#21, Input stream 2=#3.Output stream 2 -> Identity => #22
#22.Output stream 1 -> Temporal filter "Frequency 4" => #23
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
#22.Output stream 2 -> Target Separator => #24
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 4
  Non Targets = 0 1 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#23, Input stimulations=#24.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #30
Input signal=#23, Input stimulations=#24.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #36
Stimulations=#22.Output stream 2, Features for class 1=#30, Features for class 2=#36 -> Classifier trainer freq 4 => #37
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#3.Output stream 1 -> Spatial Filter => #38
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
Input stream 1=#38, Input stream 2=#3.Output stream 2 -> Identity => #39
#39.Output stream 1 -> Temporal filter "Frequency 1" => #40
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
#39.Output stream 2 -> Target Separator => #41
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#40, Input stimulations=#41.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #47
Input signal=#40, Input stimulations=#41.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #53
Stimulations=#39.Output stream 2, Features for class 1=#47, Features for class 2=#53 -> Classifier trainer freq 1 => #54
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#3.Output stream 1 -> Spatial Filter => #55
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
Input stream 1=#55, Input stream 2=#3.Output stream 2 -> Identity => #56
#56.Output stream 1 -> Temporal filter "Frequency 2" => #57
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
#56.Output stream 2 -> Target Separator => #58
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#57, Input stimulations=#58.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #64
Input signal=#57, Input stimulations=#58.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #70
Stimulations=#56.Output stream 2, Features for class 1=#64, Features for class 2=#70 -> Classifier trainer freq 2 => #71
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
New input[0]=#54, New input[1]=#71, New input[2]=#20, New input[3]=#37 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
