OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  Signal processing for the second stimulation frequency
Comment
  Configurable box
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Connection to the external application

  The external stimulator is controlled through VRPN
  to display the configured sequence of targets at
  desired moments.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream, #0.Signal stream -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Identity => #2
-> Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> 0x341d3912 HelloWorldWithInput
  Message = checkpoint2
#3 -> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #9
  Equation = log(1+x)
-> 0x341d3912 HelloWorldWithInput
  Message = checkpoint3
#9 -> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
#12.Labels -> 0x341d3912 0xc73e83ec Stimulation listener "CLASSIFIER"
  Log level to use = Information
#2 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #20
Features=#20 -> Classifier processor => #21
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
#2 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #28
Features=#28 -> Classifier processor => #29
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
#2 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #36
Features=#36 -> Classifier processor => #37
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
New input[0]=#12.Labels, New input[1]=#21.Labels, New input[2]=#29.Labels, New input[3]=#37.Labels -> SSVEP Voter => #38
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-combination-classifier.lua
  Class count = 4
-> 0x341d3912 TCP Writer
  Port = 5678
  Output format = Raw
Input 1=#38, Input 2=#38, Input 3=#38 -> 0x341d3912 Button VRPN Server "VRPN Ship Control"
  Peripheral name = SSVEP_VRPN_ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
#38 -> 0xc73e83ec Stimulation listener "VOTER"
  Log level to use = Information
Input stream 2=#0.Signal stream -> 0x341d3912 Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-[$core{date}-$core{time}]-test.ov
  Use compression = false

0x341d3912 0xc73e83ec Generic stream reader => #43
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-[2018.01.17-17.02.57]-test.ov
#43.Output stream 2 -> 0x341d3912 0xc73e83ec Stimulation listener "STREAMER"
  Log level to use = Information
#43.Output stream 1 -> 0x341d3912 HelloWorldWithInput
  Message = checkpoint1

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-demo --run-bg trainer

Scenario Control => #48
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#48.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#48.Output 1 -> SSVEP Training Controller => #50
  Lua Script = ${Player_ScenarioDirectory}/scripts/training-acquisition-controller.lua
  Goal sequence = 0 2 3 4 1 2 1 4 0 3 1 4 2 3 4 0 2 0 4 3 1 0 4 3 1 2 4 3 0 1 2 1 4 3 2 0 3 2 0 1
  Stimulation duration = 99999
  Break duration = 0.1
  Flickering delay = 0.1
  Training Target Size = 0.3;0.3
  Training Targets' Positions = (0.0;0.0);(0.0;0.5);(-0.5;0.0);(0.5;0.0);(0.0;-0.5)
#50.Stimulations -> Identity => #51
Input 1=#51, Input 2=#51, Input 3=#51, Input 4=#51, Input 5=#51 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
  Button 5 ON = OVTK_StimulationId_VisualSteadyStateStimulationStart
  Button 5 OFF = OVTK_StimulationId_VisualSteadyStateStimulationStart
#50.New output -> 0x341d3912 Identity => #53
Input 1=#53, Input 2=#53, Input 3=#53, Input 4=#53, Input 5=#53, Input 6=#53, Input 7=#53 -> 0x341d3912 Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06

0x341d3912 Stimulation multiplexer

0x341d3912 Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = false

0x341d3912 Stimulation Voter
  Number of stimuli required for vote = 4
  Time window (secs) = 2
  Clear votes = After output
  Output timestamp = Time of last voting stimulus
  Reject class label = OVTK_StimulationId_Label_00
  Reject class can win = No
