OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Settings
  inFile = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.01.17-16.49.48]-tonis-test.ov

Generic stream reader => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Identity => #2
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
#2 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #17
Features=#17 -> Classifier processor => #18
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
#2 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #25
Features=#25 -> Classifier processor => #26
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
#2 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #33
Features=#33 -> Classifier processor => #34
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
New input[0]=#10.Labels, New input[1]=#18.Labels, New input[2]=#26.Labels, New input[3]=#34.Labels -> SSVEP Voter => #35
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-combination-classifier.lua
  Class count = 4
-> 0x341d3912 Stimulation listener "output"
  Log level to use = Information
#1.Output stream 2 -> Identity => #37
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
New input[0]=#37, New input[1]=#35 -> Confusion Matrix Calculator
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-confusion-matrix-base.lua
  Class count = 4
#0.Output stream 3 -> 0x341d3912 Stimulation listener "input"
  Log level to use = Information
