OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Settings
  inFile = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.01.17-16.49.48]-tonis-test.ov

0x341d3912 Generic stream reader => #0
  Filename = ${inFile}
#0.Output stream 2 -> 0x341d3912 HelloWorldWithInput
  Message = checkpoint1
#0.Output stream 3 -> 0x341d3912 Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/scripts/stimulation_indexer.lua
-> 0x341d3912 Stimulation listener
  Log level to use = Information

CSV File Reader => #4
  Filename = ${inFile}
#4.Output stream -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Temporal filter "Notch 50Hz" => #6
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
Input stream 1=#6, Input stream 2=#4.Output stimulation -> Identity => #7
#7.Output stream 1 -> Identity => #8
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #14
  Equation = log(1+x)
#8 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #20
  Equation = log(1+x)
#8 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #26
  Equation = log(1+x)
#8 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #32
  Equation = log(1+x)
#8 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #38
  Equation = log(1+x)
Input stream 1=#14, Input stream 2=#38 -> Feature aggregator => #39
Features=#39 -> Classifier processor => #40
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
#8 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #46
  Equation = log(1+x)
Input stream 1=#20, Input stream 2=#46 -> Feature aggregator => #47
Features=#47 -> Classifier processor => #48
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
#8 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #54
  Equation = log(1+x)
Input stream 1=#26, Input stream 2=#54 -> Feature aggregator => #55
Features=#55 -> Classifier processor => #56
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
#8 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #62
  Equation = log(1+x)
Input stream 1=#32, Input stream 2=#62 -> Feature aggregator => #63
Features=#63 -> Classifier processor => #64
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
New input[0]=#40.Labels, New input[1]=#48.Labels, New input[2]=#56.Labels, New input[3]=#64.Labels -> 0x341d3912 SSVEP Voter => #65
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-combination-classifier.lua
  Class count = 4
-> 0x341d3912 0xc73e83ec Stimulation listener "CLASSIFIER"
  Log level to use = Information
#64.Probability values -> 0x341d3912 Matrix Display 03
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#7.Output stream 2 -> Identity => #68
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
New input[0]=#68, New input[1]=#65 -> 0x341d3912 Confusion Matrix Calculator
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-confusion-matrix.lua
  Class count = 4
classMat1=#40.Probability values, classMat2=#48.Probability values, classMat3=#56.Probability values, classMat4=#64.Probability values, currentTarget=#68 -> Python scripting
  Clock frequency (Hz) = 50
  Script = ${Player_ScenarioDirectory}/scripts/python-confusion-matrix.py
  Epoch Duration = ${epDur}
  Epoch Interval = ${epInt}
  Freq Tol = ${freqTol}
  channels = ${ch}
  Nr of subjects = ${nrOfSubjects}
  SimulationFreq = ${simFreq1};${simFreq2};${simFreq3};${simFreq4}
  Current Subject Nr = ${currentSubjNr}
  Thresholds = ${thresh}
