OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Settings
  inFile = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.01.17-16.49.48]-tonis-test.ov

Generic stream reader => #0
  Filename = C:/Users/Tonnius/Documents/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.03.26-11.57.22]-t6nis-75-857Hz-test.ov
#0.Output stream 2 -> 0x341d3912 HelloWorldWithInput
  Message = checkpoint1
#0.Output stream 2 -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Temporal filter "Notch 50Hz" => #3
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
#0.Output stream 3 -> Lua Stimulator => #4
  Lua Script = ${Player_ScenarioDirectory}/scripts/stimulation_indexer.lua
Input stream 1=#3, Input stream 2=#4 -> Identity => #5
#5.Output stream 1 -> Identity => #6
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #12
  Equation = log(1+x)
#6 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #18
  Equation = log(1+x)
#6 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #24
  Equation = log(1+x)
#6 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #30
  Equation = log(1+x)
#6 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #36
  Equation = log(1+x)
Input stream 1=#12, Input stream 2=#36 -> Feature aggregator => #37
Features=#37 -> Classifier processor => #38
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
#38.Probability values -> 0x341d3912 Matrix Display 00
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#6 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #45
  Equation = log(1+x)
Input stream 1=#18, Input stream 2=#45 -> Feature aggregator => #46
Features=#46 -> Classifier processor => #47
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
#6 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #53
  Equation = log(1+x)
Input stream 1=#24, Input stream 2=#53 -> Feature aggregator => #54
Features=#54 -> Classifier processor => #55
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
#6 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4h1.cfg
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #61
  Equation = log(1+x)
Input stream 1=#30, Input stream 2=#61 -> Feature aggregator => #62
Features=#62 -> Classifier processor => #63
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
New input[0]=#38.Labels, New input[1]=#47.Labels, New input[2]=#55.Labels, New input[3]=#63.Labels -> SSVEP Voter => #64
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-combination-classifier.lua
  Class count = 4
#63.Probability values -> 0x341d3912 Matrix Display 03
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5.Output stream 2 -> Identity => #66
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Targets=#66, Classification results=#64 -> 0x341d3912 Confusion Matrix
  Percentages = false
  Sums = false
  Class 1 = OVTK_StimulationId_Label_00
  Class 2 = OVTK_StimulationId_Label_01
  Class 3 = OVTK_StimulationId_Label_02
  Class 4 = OVTK_StimulationId_Label_03
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
New input[0]=#66, New input[1]=#64 -> Confusion Matrix Calculator => #70
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-confusion-matrix.lua
  Class count = 4
realTarget=#70.Stimulations, predictedTarget=#70.New output[1], detectTime=#70.New output[2] -> 0x341d3912 Python scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/python-confusion-matrix.py
  Epoch Duration = 0.5
  Epoch Interval = 0.1
  Freq Tol = 0.25
  channels = 1:5
#70.New output[2] -> 0x341d3912 0xc73e83ec Stimulation listener "CLASSIFIER"
  Log level to use = Information
#4 -> 0x341d3912 Stimulation listener
  Log level to use = Information
