OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  The Generic Stream Reader box
  reads an OpenViBE file containing signals.
Comment
  Each channel is referenced against
  channel Nz (which was recorded on the nose
  in the demonstrated file) thanks to the
  Reference Channel box.
Comment
  The Signal Display
  box is just present to
  monitor the input of
  the spectrum
  computation pipeline.

  The Window Manager
  is used to organize the
  two windows correctly !
Comment
  Then the Temporal Filter box
  filters the signal in the [1 128] Hz range.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  16th of second. This is a moving window.
Comment
  An FFT is applied on each window thanks to the
  Spectral Analisys box.
Comment
  Finally, the Power Spectrum Display
  displays the resuling spectrum.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = /home/tonnius/Git/magister_BCI/OpenVibe/ssvep_maka/signals/ssvep-record-[2018.01.09-14.53.18]-tonis.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Spectral analysis => #4
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#4.Amplitude -> Power spectrum display
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.001
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#4.Amplitude -> Stacked Bitmap (Horizontal)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 30
  Matrix Count = 40
  Gain = 0.0005
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
