OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  Configurable box
Comment
  Connection to the external application

  The external stimulator is controlled through VRPN
  to display the configured sequence of targets at
  desired moments.

Scenario Control => #0
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#0.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output 1 -> SSVEP Training Controller => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/training-acquisition-controller.lua
  Goal sequence = 0 2 3 4 1 2 1 4 0 3 1 4 2 3 4 0 2 0 4 3 1 0 4 3 1 2 4 3 0 1 2 1 4 3 2 0 3 2 0 1
  Stimulation duration = 99999
  Break duration = 0.1
  Flickering delay = 0.1
  Training Target Size = 0.3;0.3
  Training Targets' Positions = (0.0;0.0);(0.0;0.5);(-0.5;0.0);(0.5;0.0);(0.0;-0.5)
#2.Stimulations -> Identity => #3
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3, Input 5=#3 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
  Button 5 ON = OVTK_StimulationId_VisualSteadyStateStimulationStart
  Button 5 OFF = OVTK_StimulationId_VisualSteadyStateStimulationStart
#2.New output -> 0x341d3912 Identity => #5
Input 1=#5, Input 2=#5, Input 3=#5, Input 4=#5, Input 5=#5, Input 6=#5, Input 7=#5 -> 0x341d3912 Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-demo --run-bg trainer
