OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)

Generic stream reader => #0
  Filename = /home/tonnius/Git/openvibe/dist/extras-Release/share/openvibe/scenarios/bci-examples/ssvep_maka/signals/ssvep-record-[2018.01.10-16.10.07]-test.ov
#0.Output stream 2 -> 0x341d3912 HelloWorldWithInput
  Message = checkpoint1
#0.Output stream 2 -> Channel Selector => #2
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
#0.Output stream 3 -> Lua Stimulator => #3
  Lua Script = ${Player_ScenarioDirectory}/scripts/stimulation_indexer.lua
Input stream 1=#2, Input stream 2=#3 -> Identity => #4
#4.Output stream 1 -> Identity => #5
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #12
Features=#12 -> Classifier processor => #13
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
#13.Probability values -> 0x341d3912 Matrix Display 00
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #21
Features=#21 -> Classifier processor => #22
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
#5 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #29
Features=#29 -> Classifier processor => #30
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
#5 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
-> Time based epoching "TBE" => #33
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Data=#33 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#33 -> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #38
Features=#38 -> Classifier processor => #39
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
New input[0]=#13.Labels, New input[1]=#22.Labels, New input[2]=#30.Labels, New input[3]=#39.Labels -> SSVEP Voter => #40
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-combination-classifier.lua
  Class count = 4
-> 0x341d3912 0xc73e83ec Stimulation listener "CLASSIFIER"
  Log level to use = Information
#39.Probability values -> 0x341d3912 Matrix Display 03
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4.Output stream 2 -> Identity => #43
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Targets=#43, Classification results=#40 -> 0x341d3912 Confusion Matrix
  Percentages = false
  Sums = false
  Class 1 = OVTK_StimulationId_Label_00
  Class 2 = OVTK_StimulationId_Label_01
  Class 3 = OVTK_StimulationId_Label_02
  Class 4 = OVTK_StimulationId_Label_03
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
New input[0]=#43, New input[1]=#40 -> Confusion Matrix Calculator => #47
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-confusion-matrix.lua
  Class count = 4
New1=#47.Stimulations, New2=#47.New output -> Python scripting
  Clock frequency (Hz) = 64
  Script = /home/tonnius/Git/openvibe/dist/extras-Release/share/openvibe/scenarios/box-tutorials/python/scripts/python-confusion-matrix.py
#3 -> 0x341d3912 Stimulation listener
  Log level to use = Information
